# Generated by Configurator on Tue Jun 11 15:57:00 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,BitFlowCameraX2,TwoPhoton,BitFlowCameraX2
Device,Violet,NI100X,AnalogIO
Device,Blue,NI100X,AnalogIO
Device,Green,NI100X,AnalogIO
Device,Yellow,NI100X,AnalogIO
Device,Red,NI100X,AnalogIO
Device,FarRed,NI100X,AnalogIO
Device,XYStage,Prior,XYStage
Device,DHub,DemoCamera,DHub
Device,Objective Res,DemoCamera,DObjective
Device,TeensySLM1,TeensySLM,Teensy-SLM
Device,TeensySLM2,TeensySLM,Teensy-SLM
Device,Dual TeensySLM Virtual Shutter,TeensySLM,Teensy-SLM Virtual Shutter
Device,PI_GCSController,PI_GCS_2,PI_GCSController
Device,PIZStage,PI_GCS_2,PIZStage

# Pre-init settings for devices
Property,BitFlowCameraX2,EnableBitflowChannels,11111100
Property,Violet,AutoDetectedOutputPort,cDAQ1Mod1/ao1
Property,Violet,Demo,No
Property,Violet,IOChannel,cDAQ1Mod1/ao1
Property,Violet,MaxVolts,1.0000
Property,Violet,MinVolts,0.0000
Property,Violet,TriggerSequenceLength,1000
Property,Blue,AutoDetectedOutputPort,cDAQ1Mod1/ao0
Property,Blue,Demo,No
Property,Blue,IOChannel,cDAQ1Mod1/ao0
Property,Blue,MaxVolts,1.0000
Property,Blue,MinVolts,0.0000
Property,Blue,TriggerSequenceLength,1000
Property,Green,AutoDetectedOutputPort,cDAQ1Mod1/ao2
Property,Green,Demo,No
Property,Green,IOChannel,cDAQ1Mod1/ao2
Property,Green,MaxVolts,1.0000
Property,Green,MinVolts,0.0000
Property,Green,TriggerSequenceLength,1000
Property,Yellow,AutoDetectedOutputPort,cDAQ1Mod1/ao3
Property,Yellow,Demo,No
Property,Yellow,IOChannel,cDAQ1Mod1/ao3
Property,Yellow,MaxVolts,1.0000
Property,Yellow,MinVolts,0.0000
Property,Yellow,TriggerSequenceLength,1000
Property,Red,AutoDetectedOutputPort,cDAQ1Mod1/ao4
Property,Red,Demo,No
Property,Red,IOChannel,cDAQ1Mod1/ao4
Property,Red,MaxVolts,1.0000
Property,Red,MinVolts,0.0000
Property,Red,TriggerSequenceLength,1000
Property,FarRed,AutoDetectedOutputPort,cDAQ1Mod1/ao5
Property,FarRed,Demo,No
Property,FarRed,IOChannel,cDAQ1Mod1/ao5
Property,FarRed,MaxVolts,1.0000
Property,FarRed,MinVolts,0.0000
Property,FarRed,TriggerSequenceLength,1000
Property,XYStage,Port,COM11
Property,TeensySLM1,Height,8
Property,TeensySLM1,Port,COM3
Property,TeensySLM1,Width,8
Property,TeensySLM2,Height,8
Property,TeensySLM2,Port,COM4
Property,TeensySLM2,Width,8
Property,Dual TeensySLM Virtual Shutter,TeensySLM1,TeensySLM1
Property,Dual TeensySLM Virtual Shutter,TeensySLM2,TeensySLM2
Property,PI_GCSController,Port,COM10
Property,PI_GCSController,um in default unit,0.0010
Property,PIZStage,Axis,1
Property,PIZStage,Controller Name,PI_GCSController
Property,PIZStage,Invert travel range,1
Property,PIZStage,Limit_um,1000.0000
Property,PIZStage,Stage,DEFAULT_STAGE

# Pre-init settings for COM ports
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,9600
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,Objective Res,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,PIZStage,1

# Roles
Property,Core,Camera,BitFlowCameraX2
Property,Core,Shutter,Dual TeensySLM Virtual Shutter
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective Res
Label,Objective Res,5,20x Hi-Res
Label,Objective Res,4,20x Low-Res
Label,Objective Res,3,25x Hi-Res
Label,Objective Res,2,25x Low-Res

# Configuration presets
# Group: EnableChannels
# Preset: NewPreset
ConfigGroup,EnableChannels,NewPreset,BitFlowCameraX2,EnableChannels,111111


# Group: Image construction
# Preset: Snap and Live
ConfigGroup,Image construction,Snap and Live,BitFlowCameraX2,IntegrationMethod,FrameAverage

# Preset: Magellan
ConfigGroup,Image construction,Magellan,BitFlowCameraX2,IntegrationMethod,RawFramesToCircularBuffer


# Group: Channel

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,BitFlowCameraX2,CenterOffset,-2
ConfigGroup,System,Startup,BitFlowCameraX2,Deinterlace,On+Unwarp
ConfigGroup,System,Startup,BitFlowCameraX2,EnableChannels,111111
ConfigGroup,System,Startup,BitFlowCameraX2,TransposeCorrection,0
ConfigGroup,System,Startup,BitFlowCameraX2,TransposeMirrorX,1
ConfigGroup,System,Startup,BitFlowCameraX2,TransposeMirrorY,0
ConfigGroup,System,Startup,BitFlowCameraX2,TransposeXY,1
ConfigGroup,System,Startup,Violet,Volts,0.0000
ConfigGroup,System,Startup,Blue,Volts,0.0000
ConfigGroup,System,Startup,Green,Volts,0.0000
ConfigGroup,System,Startup,Yellow,Volts,0.0000
ConfigGroup,System,Startup,Red,Volts,0.0000
ConfigGroup,System,Startup,FarRed,Volts,0.0000
ConfigGroup,System,Startup,Objective Res,Label,25x Low-Res
ConfigGroup,System,Startup,BitFlowCameraX2,ChannelOffsets,020313
ConfigGroup,System,Startup,XYStage,Acceleration,10
ConfigGroup,System,Startup,XYStage,MaxSpeed,15
ConfigGroup,System,Startup,XYStage,SCurve,10
ConfigGroup,System,Startup,BitFlowCameraX2,IntegrationMethod,RawFramesToCircularBuffer


# Group: Resolution
# Preset: 25x Hi-Res
ConfigGroup,Resolution,25x Hi-Res,Objective Res,Label,25x Hi-Res

# Preset: 25x Low-Res
ConfigGroup,Resolution,25x Low-Res,Objective Res,Label,25x Low-Res



# PixelSize settings
# Resolution preset: Hi Res
ConfigPixelSize,Hi Res,Objective Res,Label,25x Hi-Res
PixelSize_um,Hi Res,0.351

# Resolution preset: Low-Res
ConfigPixelSize,Low-Res,Objective Res,Label,25x Low-Res
PixelSize_um,Low-Res,0.5440363219737536


